PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = NameGenerationTask
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent imageA
      image [set every repeat] = $landmark_imagesA
      pos = (-.35, .2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent imageB
      image [set every repeat] = $landmark_imagesB
      pos = (0, .2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent imageC
      image [set every repeat] = $landmark_imagesC
      pos = (.35, .2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_resp
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 4
      editable = True
      letterHeight = 0.05
      pos = (0, -.2)
      size = (.6, .15)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, .45)
      startVal [time (s)] = 0.0
      text = Press RETURN to continue
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    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Welcome to the Name Generation Task
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  Routine instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be given objects to look at and type in what you think the object might be called.

        Press SPACEBAR to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating in the Name Generation Task
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Flow
  Routine intro
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = landmark_stims_NameGen.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'landmark_imagesA': 'images_NG/Landmark1.png', 'landmark_imagesB': 'images_NG/Landmark5.png', 'landmark_imagesC': 'images_NG/Landmark9.png'},
      {'landmark_imagesA': 'images_NG/Landmark2.png', 'landmark_imagesB': 'images_NG/Landmark6.png', 'landmark_imagesC': 'images_NG/Landmark10.png'},
      {'landmark_imagesA': 'images_NG/Landmark3.png', 'landmark_imagesB': 'images_NG/Landmark7.png', 'landmark_imagesC': 'images_NG/Landmark11.png'},
      {'landmark_imagesA': 'images_NG/Landmark4.png', 'landmark_imagesB': 'images_NG/Landmark8.png', 'landmark_imagesC': 'images_NG/Landmark12.png'}]
    Routine trial
  LoopTerminator trials
  Routine end
